CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "tifDNA-")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifParkin-")
    Name to assign these images:Parkin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifHSP60-")
    Name to assign these images:mitochondria
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Parkin
    Name the primary objects to be identified:Parkin
    Typical diameter of objects, in pixel units (Min,Max):250,700
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:400
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:mitochondria
    Name the primary objects to be identified:mitochondria
    Typical diameter of objects, in pixel units (Min,Max):25,400
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:150
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    Thresholding method:Otsu

RelateObjects:[module_num:8|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
    Parent objects:Nuclei
    Child objects:Parkin
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ParkinCell
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
RelateObjects:[module_num:9|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
    Parent objects:Nuclei
    Child objects:mitochondria
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MitoNetwork
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Parkin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:MitoNetwork
    Name the tertiary objects to be identified:nonMitoParkin
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:DNA, Parkin, mitochondria
    Select objects to measure:Cells, Cytoplasm, MitoNetwork, Nuclei, Parkin, ParkinCell, mitochondria

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Cells, Cytoplasm, MitoNetwork, Nuclei, Parkin, ParkinCell, mitochondria
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Parkin
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#5EFF90
    Select objects to display:mitochondria
    Select outline color:blue
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Parkin

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Elsewhere...|/Volumes/ImagingData/Harvard/20220606_HeLa_GFP-Parkin_FBXO7ko_FBXO7-405_GFP-488_DNAspy555_HSP60-647/CellProfilerOutput
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/Volumes/ImagingData/Harvard/20220606_HeLa_GFP-Parkin_FBXO7ko_FBXO7-405_GFP-488_DNAspy555_HSP60-647/CellProfilerOutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:18|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|/Volumes/ImagingData/Harvard/20220606_HeLa_GFP-Parkin_FBXO7ko_FBXO7-405_GFP-488_DNAspy555_HSP60-647/CellProfilerOutput
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:MitoNetwork,ParkinCell
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:ParkinTest
    Which objects should be used for locations?:Cytoplasm
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Object
    Enter the object name:MitoNetwork
    Select the X-axis measurement:AreaShape_Area
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Object
    Enter the object name:ParkinCell
    Select the Y-axis measurement:Intensity_IntegratedIntensityEdge_Parkin
    Select the Y-axis index:ImageNumber
